config:
  title: Primer Workflow
  description: A workflow to order primers
  copyright: University of Washington
  version: 0.0.1
  authors: [{name: Tileli Amimeur, affiliation: University of Washington}, {name: Nick Bolten, affiliation: University of Washington}, {name: Leandra Brettner, affiliation: University of Washington}, {name: Cameron Cordray, affiliation: University of Washington}, {name: Miles Gander, affiliation: University of Washington}, {name: Samer Halabiya, affiliation: University of Washington}, {name: Seunghee Jang, affiliation: University of Washington}, {name: Yokesh Jayakumar, affiliation: University of Washington}, {name: Benjamin Keller, affiliation: University of Washington}, {name: Erriberto Lopez, affiliation: University of Washington}, {name: Jon Luntzel, affiliation: University of Washington}, {name: Abraham Miller, affiliation: University of Washington}, {name: Garrett Newman, affiliation: University of Washington}, {name: Michelle Parks, affiliation: University of Washington}, {name: Sundipta Rao, affiliation: University of Washington}, {name: Ayesha Saleem, affiliation: University of Washington}, {name: Devin Strickland, affiliation: University of Washington}, {name: Chris Takahashi, affiliation: University of Washington}, {name: Yaoyu Yang, affiliation: University of Washington}, {name: David Younger, affiliation: University of Washington}]
  maintainer: {name: Ben Keller, email: bjkeller@uw.edu}
  github: {user: bjkeller, repo: primer-workflow, organization: klavinslab}
  aquadoc_version: 1.0.0
  aquarium_version: <%= Bioturk::Application.config.aquarium_version %>
sample_types:
  - {name: Primer, description: A short double stranded piece of DNA for PCR and sequencing}
    - {name: Overhang Sequence, ftype: string}
    - {name: Anneal Sequence, ftype: string, required: true}
    - {name: T Anneal, ftype: number, required: true}
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object_types:
  - {name: Primer Stock, description: rehydrated primer in tube, handler: sample_container, unit: Primer, release_method: return, prefix: M20, sample_type_name: Primer}
  - {name: Primer Aliquot, description: Primers at low concentration (10uM) for every day use, handler: sample_container, data: { "measure": { "type": "concentration", "unit": "micromolar" } }, unit: Primer, release_method: return, prefix: M20, sample_type_name: Primer}
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operation_type: Make Primer Aliquot
category: Cloning
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Stock, sample_types: [Primer], object_types: [Primer Stock], routing: P}
  - {ftype: sample, role: output, name: Aliquot, sample_types: [Primer], object_types: [Primer Aliquot], routing: P}
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documentation:
# Make Primer Aliquot

Makes a 1:10 diluted 100L aliquot of a Primer stock from inventory.

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cost_model:
def cost(op)
  { labor: 0.40, materials: 0.06 }
end

protocol:
# frozen_string_literal: true

# Make Primer Aliquot protocol.
#
# For each input primer stock, transfers 10 uL of stock into 90 uL of water in
# a 1.5 mL tube.
class Protocol
  def main
    operations.retrieve.make

    gather_tubes(
      count: operations.length,
      aliquot_ids: operations.map { |op| op.output('Aliquot').item.id }
    )
    create_aliquots(operations)

    operations.store
  end

  # Gather and prepare tubes for new aliquots.
  #
  # @param count [FixNum] the number of tubes to prepare
  # @param aliquot_ids [Array<FixNum>] the item IDs to label tubes
  def gather_tubes(count:, aliquot_ids:)
    show do
      title 'Prepare aliquot tubes'

      note "Grab #{count} 1.5 mL tubes"
      note "Label each tube with the following ids: #{aliquot_ids.to_sentence}"
      note 'Using the 100 uL pipette, pipette 90uL of water into each tube'
    end
  end

  # Displays instructions to transfer 10 uL of primer stock into the tube with
  # the corresponding label.
  #
  # @param operations [OperationList] the operations specifying transfer
  def create_aliquots(operations)
    show do
      title 'Transfer primer stock into primer aliquot'

      note 'Pipette 10 uL of the primer stock into a tube according to the ' \
           'following table:'
      table operations
        .start_table
        .input_item('Stock')
        .output_item('Aliquot', checkable: true)
        .end_table
    end
  end
end

test:
# frozen_string_literal: true

class ProtocolTest < ProtocolTestBase
  def setup; end

  def analyze; end
end

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object_types:
  - {name: Lyophilized Primer, description: Some barely visible white powder, handler: sample_container, unit: tube, release_method: return, sample_type_name: Primer}
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operation_type: Order Primer
category: Cloning
deployed: false
on_the_fly: false
timing: {start: 960, stop: 990, days: ["Mo","Tu","We","Th","Fr"], active: true}
field_types:
  - {ftype: sample, role: output, name: Primer, sample_types: [Primer], object_types: [Lyophilized Primer], routing: P}
  - {ftype: string, role: input, name: Urgent?}
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documentation:
# OrderPrimer

Displays instructions to order DNA oligos for the specified output primer from a vendor.

Indicate whether the order is urgent using the `Urgent?` parameter.

Currently supported vendors are IDT and Sigma-Aldrich.
Use the **Parameters** menu to set the user and password for the vendor(s) you want to be able to use.
Set values for `IDT User` and `IDT Password` for IDT; and `Sigma-Aldrich User` and `Sigma-Aldrich Password` for Sigma-Aldrich.

See the `Cloning/Vendor` library to add a vendor.

precondition:
# frozen_string_literal: true

# Test the precondition for the given Order Primer operation.
#
# The output primer may not be ordered if the Sample does not have an overhang
# or annealing sequence.  Otherwise, it may be ordered if one of the following
# holds:
# - the primer order is urgent,
# - the total cost of all pending orders exceeds $50, or
# - there are other orders that are urgent.
#
# @param operation [Operation] the Order Primer operation
# @return [Boolean] true if the primer can be ordered, or false otherwise
def precondition(operation)
  # TODO: let user know that primers don't have necessary structure
  primer_sample = operation.output('Primer').sample
  return false unless primer_sample.properties['Overhang Sequence'].present?
  return false unless primer_sample.properties['Anneal Sequence'].present?

  return true if urgent?(operation)

  pending_orders = Operation.where('status IN (?) && operation_type_id IN (?)',
                                   %w[waiting pending delayed],
                                   operation.operation_type.id)
  total_cost = pending_orders.inject(0) do |sum, order|
    sum + order.nominal_cost[:materials]
  end
  return true if total_cost > 50

  pending_orders.any? { |order_operation| urgent?(order_operation) }
end

# Indicate whether the operation has the urgent input parameter set.
#
# @param operation [Operation] the Order Primer operation
# @return [Boolean] true if the urgent parameter is set, false otherwise
def urgent?(operation)
  urgent_parameter = operation.input('Urgent?').val

  urgent_parameter.present? && urgent_parameter.casecmp?('yes')
end

cost_model:
# Kilroy was here 2017-09-22 18:54:13
def cost(op)
    
  props = op.output("Primer").sample.properties
  seq = props["Overhang Sequence"] + props["Anneal Sequence"]
  n = seq.length
  
  if n <= 60
    c = n * Parameter.get_float('short primer cost')
  elsif n <= 90
    c = n * Parameter.get_float('medium primer cost')
  else
    c = n * Parameter.get_float('long primer cost')
  end
  
  { labor: 1.8, materials: c }
  
end

protocol:
# frozen_string_literal: true

needs 'Standard Libs/Feedback'
needs 'Sample Models/Primer'
needs 'Cloning/Vendor'

# Order Primer protocol.
#
# Protocol to order primers from a vendor selected by the user from vendors
# supported by the Vendor module.
# Uses the vendor module to provide instructions to order the primers, and
# then adds the order number as an association for each of the primer outputs.
class Protocol
  include Feedback
  include Vendor

  def main
    operations.retrieve.make

    vendor = Vendor.determine_vendor(protocol: self)
    vendor.login(protocol: self)

    primers = operations.map { |op| create_primer(output: op.output('Primer')) }
    order_number = vendor.order_primers(protocol: self, primers: primers)
    add_order_number(operations: operations, order_number: order_number)

    get_protocol_feedback
    {}
  end

  # Create a Primer object from the Item of the given output.
  #
  # @param output [FieldValue] the output value
  # @return [Primer] the primer object for the Sample of the output Item
  def create_primer(output:)
    Primer.new(sample: output.item.sample)
  end

  # Add the given order number to all operations in the operations list
  # unless the order number is nil or the empty string.
  #
  # @param operations [OperationsList] the list of operations
  # @param order_number [String] the order number for 
  def add_order_number(operations:, order_number:)
    return if order_number.blank?
    operations.each do |op|
      op.set_output_data('Primer', :order_number, order_number)
    end
  end
end

test:
# frozen_string_literal: true

class ProtocolTest < ProtocolTestBase
  def setup
    Parameter.make('IDT User', 'dummy_user')
    Parameter.make('IDT Password', 'dummy_password')
    sample = primer_sample(name: 'Test Primer')
    add_operation.with_output('Primer', sample)
  end

  def analyze
    assert_equal @backtrace.last[:operation], 'complete'
  end

  def primer_sample(name:, description: 'A primer for testing')
    sample_type(type_name: 'Primer',
                definition: [
                  {
                    name: 'Anneal Sequence',
                    array: false,
                    required: true,
                    ftype: 'string'
                  },
                  {
                    name: 'Overhang Sequence',
                    array: false,
                    required: false,
                    ftype: 'string'
                  },
                  {
                    name: 'T Anneal',
                    array: false,
                    required: true,
                    ftype: 'number'
                  }
                ]).save
    sample(name: name,
           description: description,
           type_name: 'Primer',
           attributes: [
             { name: 'Anneal Sequence', value: 'ATTCTA' },
             { name: 'Overhang Sequence', value: 'ATCTCGAGCT' },
             { name: 'T Anneal', value: 70 }
           ])
  end

  def sample(name:, description:, user: nil, type_name:, attributes:)
    sample_type = sample_type(type_name: type_name)
    return nil if sample_type.nil?

    user = User.all.last if user.nil?
    sample = Sample.creator(
      {
        sample_type_id: sample_type.id,
        description: description,
        name: name,
        project: 'Testing',
        field_values: attributes
      },
      user
    )
    sample
  end

  def sample_type(type_name:, description: 'test type', definition: nil)
    sample_type = SampleType.find_by_name(type_name)
    return sample_type unless sample_type.nil?

    SampleType.create_from_raw(
      name: type_name,
      description: description,
      field_types: definition
    )
  end
end

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operation_type: Rehydrate Primer
category: Cloning
deployed: false
on_the_fly: false
timing: {start: 690, stop: 870, days: ["Mo","Tu","We","Th","Fr"], active: true}
field_types:
  - {ftype: sample, role: input, name: Primer, sample_types: [Primer], object_types: [Lyophilized Primer], routing: P}
  - {ftype: sample, role: output, name: Primer Aliquot, sample_types: [Primer], object_types: [Primer Aliquot], routing: P}
  - {ftype: sample, role: output, name: Primer Stock, sample_types: [Primer], object_types: [Primer Stock], routing: P}
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documentation:
# Rehydrate Primer

Takes a primer and hydrates it, yielding a primer aliquot and a primer stock.

This protocol assumes that all primers in the job are from the same order.
In practice, the BIOFAB ensures this by telling IDT to only send an order once
all primers are complete.
This allows the lab managers to identify and schedule the appropriate job.

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cost_model:
def cost(op)
  { labor: 3.16, materials: 0.12 }
end

protocol:
# frozen_string_literal: true

needs 'Standard Libs/Feedback'

# Rehydrate Primers protocol.
# Takes a primer and hydrates it yielding a primer aliquot and stock.
#
# Note: this protocol assumes details about vendor labeling that may be
# IDT-specific.
#
# TODO: add use of Units
class Protocol
  include Feedback

  def main
    operations.retrieve interactive: false
    operations.make

    spin_down_primers(operations)
    get_primer_nm(operations)

    rehydrate_primers(operations)
    aliquot_ids = operations.map do |op|
      op.output('Primer Aliquot').item.id
    end
    prepare_aliquot_tubes(tube_ids: aliquot_ids)
    vortex_and_centrifuge(count: operations.length)
    make_aliquots(operations)

    operations.each { |op| op.input('Primer').item.mark_as_deleted }
    operations.store

    get_protocol_feedback
    {}
  end

  # Display instructions to spin down the primers
  #
  # @param primers [Array<Item>] the input primers
  def spin_down_primers(_primers)
    # TODO: reference the tubes
    show do
      title 'Quick spin down all the primer tubes'
      note 'Place the primer tubes in a table top centrifuge and spin down ' \
           'for 3 seconds.'
      warning 'Make sure to balance!'
    end
  end

  # Displays the primers and for each asks for the nMoles of primer on the tube
  # label. Stores the measurement in `operation.temporary[:n_moles]`
  def get_primer_nm(operations)
    show do
      title 'Enter the nMoles of the primer'

      note 'Enter the number of moles for each primer, in nM. ' \
           'This is written toward the bottom of the tube, below the MW.'
      note 'The ID of the primer is listed before the primer\'s name on the ' \
           'side of the tube.'
      table operations
        .start_table
        .input_sample('Primer')
        .get(:n_moles, type: 'number', heading: 'nMoles', default: 10)
        .end_table
    end
  end

  # Displays instructions to label the primer tubes with a new ID, and then add
  # TE to rehydrate the primer.  Adds 10uL for each nM.
  #
  # @param operations [OperationList] the operations with input primers
  def rehydrate_primers(operations)
    show do
      title 'Label and rehydrate'

      note 'Label each primer tube with the IDs shown in Primer Stock IDs ' \
           'and rehydrate with volume of TE shown in Rehydrate'
      table operations
        .start_table
        .input_sample('Primer')
        .output_item('Primer Stock')
        .custom_column(
          heading: 'Rehydrate (uL of TE)', checkable: true
        ) { |op| op.temporary[:n_moles] * 10 }
        .end_table
    end
  end

  # Displays instructions to vortex and centrifuge the rehydrated primers.
  #
  # @param count [Fixnum] the number of primers
  def vortex_and_centrifuge(count:)
    show do
      title 'Vortex and centrifuge'
      note 'Wait one minute for the primer to dissolve in TE.' if count < 7
      note 'Vortex each tube on table-top vortexer for 5 seconds and then ' \
           'quick spin for 2 seconds on table top centrifuge.'
    end
  end

  # Displays instructions to prepare the aliquot tubes by labeling and adding
  # 90uL of water to each.
  #
  # @param tube_ids [Array<Fixnum>] the list of item IDs
  def prepare_aliquot_tubes(tube_ids:)
    count = tube_ids.length
    id_string = tube_ids.map(&:to_s).join(', ')
    show do
      title 'Prepare 1.5 mL tubes'

      note 'While the primer dissolves in the TE, prepare tubes for each aliquot'
      check "Grab #{count} 1.5 mL tubes, label with following ids: #{id_string}"
      check 'Add 90 uL of water into each above tube.'
    end
  end

  # Displays instructions to transfer 10uL of the primer stock into each output
  # tube.
  #
  # @param operations [OperationList] the operations with output primers
  def make_aliquots(operations)
    show do
      title 'Make primer aliquots'

      note 'Add 10 uL from each primer stock into each primer aliquot tube ' \
           'using the following table.'

      table operations
        .start_table
        .output_item('Primer Stock', heading: 'Primer Stock (10 uL)')
        .output_item('Primer Aliquot', checkable: true)
        .end_table
      note 'Vortex each tube after the primer has been added.'
    end
  end
end

test:
# frozen_string_literal: true

class ProtocolTest < ProtocolTestBase
  def setup
    sample = primer_sample(name: 'Test Primer')
    add_operation.with_input('Primer', sample)
                 .with_output('Primer Aliquot', sample)
                 .with_output('Primer Stock', sample)
  end

  def analyze
    assert_equal(@backtrace.last[:operation], 'complete')
  end

  def primer_sample(name:, description: 'A primer for testing')
    sample_type(type_name: 'Primer',
                definition: [
                  {
                    name: 'Anneal Sequence',
                    array: false,
                    required: true,
                    ftype: 'string'
                  },
                  {
                    name: 'Overhang Sequence',
                    array: false,
                    required: false,
                    ftype: 'string'
                  },
                  {
                    name: 'T Anneal',
                    array: false,
                    required: true,
                    ftype: 'number'
                  }
                ]).save
    sample(name: name,
           description: description,
           type_name: 'Primer',
           attributes: [
             { name: 'Anneal Sequence', value: 'ATTCTA' },
             { name: 'Overhang Sequence', value: 'ATCTCGAGCT' },
             { name: 'T Anneal', value: 70 }
           ])
  end

  def sample(name:, description:, user: nil, type_name:, attributes:)
    sample_type = sample_type(type_name: type_name)
    return nil if sample_type.nil?

    user = User.all.last if user.nil?
    sample = Sample.creator(
      {
        sample_type_id: sample_type.id,
        description: description,
        name: name,
        project: 'Testing',
        field_values: attributes
      },
      user
    )
    sample
  end

  def sample_type(type_name:, description: 'test type', definition: nil)
    sample_type = SampleType.find_by_name(type_name)
    return sample_type unless sample_type.nil?

    SampleType.create_from_raw(
      name: type_name,
      description: description,
      field_types: definition
    )
  end
end

library: {name: Vendor, category: Cloning}
code_source:
# frozen_string_literal: true

# Module to manage details of ordering primers from a vendor using the
# `Cloning/Order Primer` protocol.
#
# Each vendor corresponds to a sub-module of the Vendor module implementing a
# method `order_primer(Primer)`, where `Primer` is defined in the library
# `Sample Models/Primer`
#
module Vendor
  # Returns the vendor selected by the user.
  #
  # @param protocol [Protocol] the protocol where output should be displayed
  # TODO: allow for user to specify which vendors they use with Parameters
  def self.determine_vendor(protocol:)
    vendors = %w[IDT Sigma-Aldrich]
    # vendors = vendors.reject { |v| Parameter.get("#{v} User").blank? }

    vendor_show_hash = protocol.show do
      select(vendors,
             var: 'vendor',
             label: 'Select the vendor you will be ordering primers from',
             default: 0)
    end

    if vendor_show_hash.value?('IDT')
      IDT
    elsif vendor_show_hash.value?('Sigma-Aldrich')
      SigmaAldrich
    end
  end

  # Defines common methods for primer vendors.
  #
  # If you add a vendor, extend the module with this one.
  module PrimerVendor
    # Displays login instructions for the vendor's website.
    #
    # @param protocol [Protocol] the protocol where output should be displayed
    # @param url [String] the URL for the vendor website
    # @param name [String] the login name for the vendor website
    def login_helper(protocol:, url:, name:)
      user = Parameter.get("#{name} User")
      password = Parameter.get("#{name} Password")
      protocol.show do
        title 'Prepare to order primer'

        check "Go to the <a href='#{url}'>#{name} website</a>, log in with " \
              "the account (Username: #{user}, password is #{password})."
        warning 'Ensure that you are logged in to this exact username ' \
                'and password!'
      end
    end

    # Creates a primer table with entries for this vendor.
    # Note: uses vendor module definitions of primer_table_row.
    #
    # @param primers [Array] the primers to be ordered
    def build_primer_table(primers:)
      primers.map do |primer|
        primer_table_row(sample: primer.sample, sequence: primer.sequence)
      end
    end
  end

  # Module for making orders from IDT.
  module IDT
    extend PrimerVendor

    LOWER_LENGTH = 60
    UPPER_LENGTH = 90

    # Displays instructions to login to IDT website.
    #
    # @param protocol [Protocol] the protocol where output should be displayed
    def self.login(protocol:)
      login_helper(
        protocol: protocol,
        url: 'https://www.idtdna.com/site/account',
        name: 'IDT'
      )
    end

    # Returns an array representing a table row.
    #
    # @param sample [Sample] the sample object
    # @param sequence [String] the sequence string for the primer
    def self.primer_table_row(sample:, sequence:)
      [sample.id.to_s + ' ' + sample.name, sequence]
    end

    # Create strings containing identity of primers based on length
    def self.build_primer_lists(primers)
      short_primers = []
      long_primers = []

      primers.each_index do |index|
        primer = primers[index]
        primer_string = "#{primer} (##{index + 1})"
        if primer.length > LOWER_LENGTH && primer.length <= UPPER_LENGTH
          short_primers.push(primer_string)
        elsif primer.length > UPPER_LENGTH
          long_primers.push(primer_string)
        end
      end

      [short_primers.join(', '), long_primers.join(', ')]
    end

    # Shows the primer table that was created in an earlier call and sets the
    # output data.
    #
    # @param protocol [Protocol] the protocol where output should be displayed
    # @param primer_tab [Array<Array<String>>]  matrix for order table
    # @param short_primers [String]  the string of short primers
    # @param long_primers [String]  the string of long primers
    def self.display_primer_table(protocol:, primer_tab:, short_primers:, long_primers:)
      data = protocol.show do
        title 'Create an IDT DNA oligos order'

        if short_primers != ''
          warning "Oligo concentration for primer(s) #{short_primers} will " \
                  'have to be set to "100 nmole DNA oligo."'
        end
        if long_primers != ''
          warning "Oligo concentration for primer(s) #{long_primers} will " \
                  'have to be set to "250 nmole DNA oligo."'
        end

        check 'Under "Custom DNA Oligos", click "DNA Oligos", ' \
              'then click "Order now", and click "Bulk input". ' \
              'Copy and paste the following table there. '
        table primer_tab

        check 'Click Add to Order, review the shopping cart to double check ' \
              'that you entered correctly. ' \
              "There should be #{operations.length} primers in the cart."
        check 'Click Checkout, then click Continue.'
        check 'Enter the payment information, click the oligo card tab, ' \
              'select the Card1 in Choose Payment and then click Submit Order.'
        check 'Go back to the main page, let it sit for 5-10 minutes, ' \
              'return and refresh, and find the order number for the order ' \
              'you just placed.'

        get('text',
            var: 'order_number',
            label: 'Enter the IDT order number below',
            default: 100)
      end

      data[:order_number]
    end

    # Displays the instructions to order the list of primers from IDT.
    #
    # @param primers [Array<Primer>] the list of primers to order
    # @return [String] the order number for the order including the primers
    def self.order_primers(protocol:, primers:)
      primer_table = build_primer_table(primers: primers)
      short_primers, long_primers = build_primer_lists(primers)
      order_number = display_primer_table(protocol: protocol,
                                          primer_tab: primer_table,
                                          short_primers: short_primers,
                                          long_primers: long_primers)

      order_number
    end
  end

  # Module for making primer orders to Sigma-Aldrich.
  module SigmaAldrich
    extend PrimerVendor

    # Displays instructions to login to the Sigma-Adrich website.
    def self.login(protocol:)
      login_helper(
        protocol: protocol,
        url: 'https://www.sigmaaldrich.com/webapp/wcs/stores/servlet/LogonForm?storeId=11001',
        name: 'Sigma-Aldrich'
      )
    end

    # Returns an array representing a table row.
    #
    # @param sample [Sample] the sample object
    # @param sequence [String] the sequence string for the primer
    def self.primer_table_row(sample:, sequence:)
      [
        sample.id.to_s + ' ' + sample.name,
        'None',
        sequence,
        'None',
        '0.025',
        'Desalt',
        'Dry',
        'None',
        '1'
      ].join('\t')
    end

    # Displays the primer table for vendor Sigma-Aldrich.
    #
    # @param primer_table [Array<Array<String>>] the table of primer details
    def self.show_primer_table(protocol:, primer_table:)
      protocol.show do
        title 'Create a Sigma-Aldrich DNA oligos order'

        check 'Under "Products", click "Custom DNA Oligos", and then under ' \
              '"Standard DNA Oligos", click "Order" under "Tubes".'
        check 'Click "Upload or Copy & Paste".'
        check 'Copy and paste the following table and click submit.'

        table primer_table

        check 'Click Add to Cart.'
        check 'Proceed to Check Out.'
        check 'Click Check Out and confirm the order.'
      end
    end

    # Displays the instructions to order the list of primers from Sigma-Aldrich.
    #
    # @param primers [Array<Primer>] the list of primers to order
    # @return [nil] since no order number is given
    def self.order_primers(protocol:, primers:)
      primer_table = build_primer_table(primers: primers)
      show_primer_table(protocol: protocol, primer_table: primer_table)

      nil
    end
  end
end

library: {name: AbstractSample, category: Sample Models}
code_source:
# frozen_string_literal: true

# Defines a superclass of sample objects to encapsulate Aquarium Sample objects.
class AbstractSample
  attr_accessor :item, :sample, :properties

  # Instantiates a new AbstractSample.
  #
  # @param sample [Sample] Sample
  # @param expected_sample_type [String] the name of the expected sample type
  # @raises [WrongSampleTypeError] if the type of the sample is not
  def initialize(sample:, expected_sample_type:)
    @sample = sample
    @properties = sample.properties

    return if type?(expected_sample_type)

    msg = "Sample #{sample.id}, #{sample.sample_type.name}, " \
          "is not a #{expected_sample_type}."
    raise WrongSampleTypeError.new(
      msg: msg, sample: sample, expected_type: expected_sample_type
    )
  end

  # Test whether this Sample has the given sample type.
  #
  # @param sample_type [String] the name of the sample type
  # @return [Boolean] true if the sample has the named type, and false otherwise.
  def type?(expected_sample_type)
    sample && sample.sample_type.name == expected_sample_type
  end

  # The name of the sample.
  #
  # @return [String] the name of the sample
  def name
    sample.name
  end

  # Fetches a property of this sample by name.
  #
  # @param property [String] the name of the property
  # @return [Object] the value of the named property for this sample
  def fetch(property)
    properties.fetch(property)
  end
end

# Exception class for an sample with the wrong sample type.
#
# @attr_reader [Sample] sample  the sample object
# @attr_reader [String] expected_type  the name of the expected sample type
class WrongSampleTypeError < StandardError
  attr_reader :sample, :expected_type

  def initialize(msg: 'Sample is not the expected type', sample:, expected_type:)
    @sample = sample
    @expected_type = expected_type
    super(msg)
  end
end

library: {name: Primer, category: Sample Models}
code_source:
needs 'Sample Models/AbstractSample'

# frozen_string_literal: true

# Defines the Primer class with methods to manage the properties of primers,
# such as sequence, length, priming site, etc.
class Primer < AbstractSample
  THIS_SAMPLE_TYPE = 'Primer'
  OVERHANG_SEQUENCE = 'Overhang Sequence'
  ANNEAL_SEQUENCE = 'Anneal Sequence'
  T_ANNEAL = 'T Anneal'
  private_constant(
    :THIS_SAMPLE_TYPE, :OVERHANG_SEQUENCE, :ANNEAL_SEQUENCE, :T_ANNEAL
  )

  # Instantiates a new Primer.
  #
  # @param sample [Sample] Sample of SampleType "Primer"
  # @return [Primer]
  def initialize(sample:)
    super(sample: sample, expected_sample_type: THIS_SAMPLE_TYPE)
  end

  # Instantiates a new Primer from an Item.
  #
  # @param item [Item] Item of a Sample of SampleType "Primer"
  # @return [Primer]
  def self.from_item(item)
    Primer.new(sample: item.sample)
  end

  # Return the overhang sequence for this Primer.
  #
  # @return [String] the overhang sequence for this Primer
  def overhang_sequence
    fetch(OVERHANG_SEQUENCE).strip
  end

  # Return the anneal sequence for this Primer.
  #
  # @return [String] the anneal sequence for this Primer
  def anneal_sequence
    fetch(ANNEAL_SEQUENCE).strip
  end

  # Return the sequence for this Primer determined as the composition of the
  # overhang and anneal sequences.
  #
  # @return the composition of the overhang and anneal sequences of this Primer
  def sequence
    overhang_sequence + anneal_sequence
  end

  # Return the length of the primer primer sequence in nt.
  #
  # @return [FixNum] the length of the sequence of this primer
  def length
    sequence.length
  end

  # The annealing temperature of the primer
  #
  # @note This is the temperature as it is entered into the database.
  #       It is not calculated and may be inaccurate depending on the template.
  # @return [FixNum] the annealing temperature
  def t_anneal
    fetch(T_ANNEAL)
  end

  # Finds binding sites for a set of primers on a set of templates
  #
  # @param primers [Array<Primer>] the primers
  # @param sites [Array<String>] the templates to be scanned
  # @return [Array<Hash>]
  def self.get_bindings(primers:, sites:)
    bindings = []
    primers.each do |primer|
      sites.each do |site|
        offset = primer.detect_priming_site(template: site)
        next if offset.blank?
        added_length = primer.sequence.length - offset[1]

        if added_length.negative?
          raise 'Detected binding site is longer than the primer sequence.'
        end

        b = { primer: primer,
              site: site,
              offset: offset,
              added_length: added_length }
        bindings.append(b)
        sites.delete(site)
        break
      end
    end
    bindings
  end

  # Finds the first binding site for a Primer on a template.
  #
  # @param template [String] the template sequence
  # @param min_length [FixNum] the minimum length of the binding site
  # @param require_perfect [FixNum] the number of nt from the 3' end that must match perfectly
  # @param allow_mismatch [FixNum] the number of mismatches allowed (doesn't do anything currently)
  # @return [Array<FixNum>] a length 2 array with the start and end position
  def detect_priming_site(template:, min_length: 16, require_perfect: 3, allow_mismatch: 1)
    # TODO: make this work with multiple matches and internal matches
    matches = scan(template, last(require_perfect))
    matches.delete_if { |m| m.offset(0)[1] < min_length }
    return if matches.blank?

    i = 1
    while matches.length > 1
      query = last(require_perfect + i)
      matches.keep_if { |m| expand_match(template, m, i) =~ /#{query}/i }
      i += 1
    end

    _start, stop = matches[0].offset(0)
    return [] unless template[0..stop] =~ /#{last(stop)}/i
    [0, stop]
  end

  # Return the suffix of the sequence of the given length.
  #
  # @param length [FixNum] the number of nucleotides
  # @return [String] the last n nucleotides of the primer sequence
  def last(length)
    sequence[-length..-1]
  end

  # Returns all matches of the pattern in the template sequence.
  #
  # @param template [String] the sequence to be scanned
  # @param pattern [String] the sequence to scan for
  # @return [Array<MatchData>]
  def scan(template, pattern)
    template.to_enum(:scan, /#{pattern}/i).map { Regexp.last_match }
  end

  # Returns the subsequence of the template constructed extended by extending
  # the the matching range by i nucleotides at the front.
  #
  # @param template [String] the template sequence
  # @param match [MatchData] a matching subsequence
  # @param length [FixNum] the length to extend
  def expand_match(template, match, length)
    start, stop = match.offset(0)
    template[(start - length)..stop]
  end
end

library: {name: Feedback, category: Standard Libs}
code_source:
module Feedback
  CONTAINER_NAME = "Feedback (Virtual)"
  SAMPLE_TYPE_NAME = "Operation Feedback"
  
  # This method will prompt the technician to write feedback for the operations
  # that they complete on each job. This feedback will be associated to an item
  # that represents each operation type.
  def get_protocol_feedback
    
    # Gets feedback from the user
    if debug
      feedback = "testing for job id"
    else
      feedback = ask_for_feedback
    end
    
    if(!feedback.blank?)
      associate_feedback feedback
    end
    
    if debug
      print_association
    end
    
  end
  
  # Associates the feedback entered by the lab technician to the OperationType of the protocol
  # that uses this library.
  #
  # @param [String] the feedback entered by the lab technician.
  def associate_feedback feedback
    operation = OperationType.find(operation_type.id)
    feedback = feedback + "- job #{jid}"
  
    feedback_array = []
    if(!operation.get(:feedback).nil?)
      feedback_array = operation.get(:feedback)
    end
    feedback_array.push(feedback)
    operation.associate :feedback, feedback_array
  end
  
  # Debugging method that prints all associations
  def print_association
    operation = OperationType.find(operation_type.id)
    feedback_array = operation.get(:feedback)
    if feedback_array
      show do
        title "This is printing because debug is on"
        note "#{feedback_array}"
      end
    end
  end
  
  # Returns the feedback entered by a lab technician.
  #
  # @return [Hash] the information returned by the feedback show block
  def ask_for_feedback
    feedback = show do
      title "We want your feedback"
      
      note "Notice anything weird with this protocol? Tell us below!"
      
      get "text", var: "feedback_user", label: "Enter your feedback here", default: ""
    end
    feedback[:feedback_user] # return
  end

end

library: {name: Units, category: Standard Libs}
code_source:
# frozen_string_literal: true

module Units
  # Volume
  MICROLITERS = 'µl'
  MILLILITERS = 'ml'

  # Weight
  NANOGRAMS = 'ng'

  # Concentration
  PICOMOLAR = 'pM'
  NANOMOLAR = 'nM'
  MICROMOLAR = 'µM'
  MILLIMOLAR = 'mM'
  MOLAR = 'M'

  # Temperature
  DEGREES_C = '°C'

  # Time
  MINUTES = 'min'
  SECONDS = 'sec'
  HOURS = 'hr'
  # Force
  TIMES_G = 'x g'

  # R/DNA Length
  BASEPAIRS = 'bp'
  KILOBASEPAIRS = 'kbp'
  MEGABASEPAIRS = 'mbp'
  GIGABASEPAIRS = 'gbp'

  # Voltage
  VOLTS = 'V'

  def self.qty_display(qty)
    "#{qty[:qty]} #{qty[:units]}"
  end

  def qty_display(qty)
    "#{qty[:qty]} #{qty[:units]}"
  end

  def add_qty_display(options)
    new_items = {}

    options.each do |key, value|
      key =~ /^(.+_)+([a-z]+)$/

      case Regexp.last_match(2)
      when 'microliters'
        units = MICROLITERS
      when 'milliliters'
        units = MILLILITERS
      when 'minutes'
        units = MINUTES
      else
        next
      end

      qty = value.to_f

      new_items["#{Regexp.last_match(1)}qty".to_sym] = {
        qty: qty, units: units
      }
    end

    options.update(new_items)
  end

  # Return the unit constant for the the unit name if there is one.
  #
  # @param unit_name [String] the name of the unit
  # @returns the value of the constant with the given name
  # @raises BadUnitNameError if the name is not the name of a defined unit
  def self.get_unit(unit_name:)
    const_get(unit_name.upcase)
  rescue StandardError
    raise BadUnitNameError.new(name: unit_name)
  end

  # Exception class for bad unit name arguments to Units::get_unit.
  #
  # @attr_reader [String] name  the bad unit name
  class BadUnitNameError < StandardError
    attr_reader :name

    def initialize(msg: 'Unknown unit name', name:)
      @name = name
      super(msg)
    end
  end

  # Return a key for the measure hash defined on the given object type.
  #
  # The measure hash must be defined in the data property of the object
  # type as JSON.
  # For instance
  #
  #   { "measure": { "type": "concentration", "unit": "micromolar" } }
  #
  # The key is constructed as the type name, an underscore, and the unit name.
  #
  #   "concentration_µM"
  #
  # @param object_type [ObjectType] the object type
  # @returns the key for the measure of the the object type if there is one
  # @raises MissingObjectTypeMeasure if the object type has no measure data_object
  def self.get_measure_key(object_type:)
    data_object = object_type.data_object
    raise MissingObjectTypeMeasureError.new(name: object_type.name) unless data_object.key?(:measure)

    measure = object_type.data_object[:measure]
    type_name = measure[:type]
    unit_name = measure[:unit]
    "#{type_name}_#{get_unit(unit_name: unit_name)}"
  end

  # Exception class for an object type without a measure hash definition.
  #
  # @attr_reader [String] name  the name of the object type
  class MissingObjectTypeMeasureError < StandardError
    attr_reader :name

    def initialize(msg: 'ObjectType has no measure in data object', name:)
      @name = name
      super(msg)
    end
  end
end
